PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1.000,-1.000,-1.000]
  expName = ppp
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor [set every frame] = $[1.000,1.000,1.000]
      pos = (-0.3, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygon_2
      fillColor [set every frame] = $[1.000,1.000,1.000]
      pos = (0.3, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code
      Code Type = Py
      Each Frame:
        # peiyu code
        f1 = 5
        phi1 = 0
        amp1 = (sin(2*pi*f1*frameN/60) - 0.5)*2
        f2 = 20
        phi2 = 0
        amp2 = (sin(2 * pi * f2 * frameN / 60) - 0.5) * 2
        polygon.setFillColor([amp1, amp1, amp1])
        polygon_2.setFillColor([amp2, amp2, amp2])
    TextComponent text_3
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 命令1
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    TextComponent text_4
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 命令2
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  Routine instr
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        脑机接口

        视觉刺激实验

        按"空格"继续

        可随时按"ESC"退出
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cue
    PolygonComponent polygon_3
      fillColor [set every repeat] = $[1.000,1.000,1.000]
      pos = (-0.3, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent polygon_4
      fillColor = $[1,1,1]
      pos = (0.3, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        loop_id = -1
      Begin Routine:
        # peiyu code cue
        loop_id += 1

        if loop_id %2 == 0:
            polygon_3.setFillColor([1.000,-1.000,-1.000])
            polygon_4.setFillColor([1.000, 1.000, 1.000])
        else:
            polygon_3.setFillColor([1.000,  1.000,  1.000])
            polygon_4.setFillColor([1.000, -1.000, -1.000])
    TextComponent text_2
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 命令1
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    TextComponent text_5
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.05
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 命令2
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine cue
    Routine trial
  LoopTerminator trials
